CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:28
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:17
    Single images count:0
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    Select the rule criteria:or (file does contain "_One_")
    Name to assign these images:A_NUCLEI
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Two_")
    Name to assign these images:B_Two
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Three_")
    Name to assign these images:C_Three
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Four_")
    Name to assign these images:D_Four
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Five_")
    Name to assign these images:E_Five
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Six_")
    Name to assign these images:F_Six
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:or (file does containregexp "_Seven_")
    Name to assign these images:G_Seven
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Eight_")
    Name to assign these images:H_Eight
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Nine_")
    Name to assign these images:I_Nine
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Ten_")
    Name to assign these images:J_Ten
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Eleven_")
    Name to assign these images:K_Eleven
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Twelve_")
    Name to assign these images:L_Twelve
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Thirteen_")
    Name to assign these images:M_Thirteen
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Fourteen_")
    Name to assign these images:N_Fourteen
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Fifteen_")
    Name to assign these images:O_Fifteen
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Sixteen_")
    Name to assign these images:P_Sixteen
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Seventeen_")
    Name to assign these images:Q_Seventeen
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:A_NUCLEI
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:No
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    Convert blue to gray?:No
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
UnmixColors:[module_num:6|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
    Stain count:1
    Select the input color image:B_Two
    Name the output name:Two
    Stain:AEC
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
UnmixColors:[module_num:7|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
    Stain count:1
    Select the input color image:C_Three
    Name the output name:Three
    Stain:AEC
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
UnmixColors:[module_num:8|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
    Stain count:1
    Select the input color image:D_Four
    Name the output name:Four
    Stain:AEC
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
UnmixColors:[module_num:9|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
    Stain count:1
    Select the input color image:E_Five
    Name the output name:Five
    Stain:AEC
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
UnmixColors:[module_num:10|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
    Stain count:1
    Select the input color image:F_Six
    Name the output name:Six
    Stain:AEC
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
UnmixColors:[module_num:11|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
    Stain count:1
    Select the input color image:G_Seven
    Name the output name:Seven
    Stain:AEC
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
UnmixColors:[module_num:12|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
    Stain count:1
    Select the input color image:H_Eight
    Name the output name:Eight
    Stain:AEC
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
UnmixColors:[module_num:13|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
    Stain count:1
    Select the input color image:I_Nine
    Name the output name:Nine
    Stain:AEC
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
UnmixColors:[module_num:14|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
    Stain count:1
    Select the input color image:J_Ten
    Name the output name:Ten
    Stain:AEC
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
UnmixColors:[module_num:15|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
    Stain count:1
    Select the input color image:K_Eleven
    Name the output name:Eleven
    Stain:AEC
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
UnmixColors:[module_num:16|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
    Stain count:1
    Select the input color image:L_Twelve
    Name the output name:Twelve
    Stain:AEC
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
UnmixColors:[module_num:17|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
    Stain count:1
    Select the input color image:M_Thirteen
    Name the output name:Thirteen
    Stain:AEC
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
UnmixColors:[module_num:18|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
    Stain count:1
    Select the input color image:N_Fourteen
    Name the output name:Fourteen
    Stain:AEC
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
UnmixColors:[module_num:19|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
    Stain count:1
    Select the input color image:O_Fifteen
    Name the output name:Fifteen
    Stain:AEC
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
UnmixColors:[module_num:20|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
    Stain count:1
    Select the input color image:P_Sixteen
    Name the output name:Sixteen
    Stain:AEC
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
UnmixColors:[module_num:21|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
    Stain count:1
    Select the input color image:Q_Seventeen
    Name the output name:Seventeen
    Stain:AEC
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
Morph:[module_num:22|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
    Select the input image:OrigRed
    Name the output image:MorphGreen
    Select the operation to perform:invert
    Number of times to repeat operation:Once
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    Diameter:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:23|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
    Select the input image:MorphGreen
    Name the primary objects to be identified:NucleiGreen
    Typical diameter of objects, in pixel units (Min,Max):9,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
MeasureObjectIntensity:[module_num:24|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
    Hidden:17
    Select an image to measure:Two
    Select an image to measure:Three
    Select an image to measure:Four
    Select an image to measure:Five
    Select an image to measure:Six
    Select an image to measure:Seven
    Select an image to measure:Eight
    Select an image to measure:Nine
    Select an image to measure:Ten
    Select an image to measure:Eleven
    Select an image to measure:Twelve
    Select an image to measure:Thirteen
    Select an image to measure:Fourteen
    Select an image to measure:Fifteen
    Select an image to measure:Sixteen
    Select an image to measure:Seventeen
    Select an image to measure:MorphGreen
    Select objects to measure:NucleiGreen

MeasureObjectSizeShape:[module_num:25|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
    Select objects to measure:NucleiGreen
    Calculate the Zernike features?:No

ConvertObjectsToImage:[module_num:26|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
    Select the input objects:NucleiGreen
    Name the output image:NucleiGreen
    Select the color format:uint16
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
SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:NucleiGreen
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    Select method for constructing file names:Single name
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    Enter single file name:Temp-
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    Saved file format:tif
    Output file location:Default Output Folder|Desktop\\\\\\\\CellProfiler\\\\\\\\Takahiro\\\\\\\\Cases\\\\\\\\3\\\\\\\\Extracted1
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:28|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop\\\\\\\\CellProfiler\\\\\\\\Takahiro\\\\\\\\Cases\\\\\\\\3\\\\\\\\Extracted1
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    :Image|Count_NucleiGreen,Image|MD5Digest_A_NUCLEI,Image|MD5Digest_C_Three,Image|MD5Digest_B_Two,Image|MD5Digest_E_Five,Image|MD5Digest_D_Four,Image|MD5Digest_G_Seven,Image|MD5Digest_F_Six,Image|MD5Digest_I_Nine,Image|MD5Digest_H_Eight,Image|MD5Digest_K_Eleven,Image|MD5Digest_J_Ten,Image|MD5Digest_M_Thirteen,Image|MD5Digest_L_Twelve,Image|MD5Digest_O_Fifteen,Image|MD5Digest_N_Fourteen,Image|MD5Digest_Q_Seventeen,Image|MD5Digest_P_Sixteen,Image|Width_A_NUCLEI,Image|Width_C_Three,Image|Width_B_Two,Image|Width_E_Five,Image|Width_D_Four,Image|Width_G_Seven,Image|Width_F_Six,Image|Width_I_Nine,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image.cptoc
    Use the object name for the file name?:No
    Data to export:NucleiGreen
    Combine these object measurements with those of the previous object?:No
    File name:NucleiGreen.cpout
    Use the object name for the file name?:No
